#@String inputFolder

/////////////////////////////////////////////////////////////////////////////
//   Capillary Density Analysis
//   Copyright (C) 2023  Lenard M. Voortman and Tooba Abbassi-Daloii
//
//   This set of macros segments myofibers and capillaries and computes the capillary density.
//
//   Scripts:
//   step0_Convert_CZI_Merge_tiffs.bat:
//     > A simple batch script to convert multiple shading-corrected CZI files
//       into a single downsampled multichannel TIFF.
//   step1_Capillary_Density_Analysis_Pipeline.bat
//     > A simple batch script that runs all the necessary steps sequentially.
//
//   The steps are:
//   0.Convert_CZI_to_Tiff.ijm
//   1.Tiff_to_Mask.ijm
//   2.Masked_Laminin.ijm
//   3.Pixelclass_Laminin_Masked.ilp
//   4.Segment_Laminin.ijm
//
//   Note: The above steps were developed for myofiber typing analysis 
//   (https://github.com/tabbassidaloii/ImageProcessing/tree/main/MyofiberTyping/Macros) and 
//   are detailed in a STAR protocol: https://doi.org/10.1016/j.xpro.2023.102075
//
//   5.Eexport_Area.ijm
//   6.Export_Quant_CD31_CD105.ijm
//   
//      
//
//   Authors:   Lenard M. Voortman, Tooba Abbassi-Daloii
//   Version:   1.1 - Refactored for distribution
//   Version:   1.2 - Fixed bug when the number of sections > 9
//
//    This program is free software: you can redistribute it and/or modify
//    it under the terms of the GNU General Public License as published by
//    the Free Software Foundation, either version 3 of the License.
// 
//    This program is distributed in the hope that it will be useful,
//    but WITHOUT ANY WARRANTY; without even the implied warranty of
//    MERCHANTABILITY or FITNESS FOR A PARTICULAR PURPOSE.  See the
//    GNU General Public License for more details.
// 
//    You should have received a copy of the GNU General Public License
//    along with this program.  If not, see <https://www.gnu.org/licenses/>.


/////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
/////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////
function FiberShapeDetectionOnLaminin(NameLamininImage,filename_seg) {
	
	// Segmentation of Fibers
	selectWindow(NameLamininImage);
	run("Duplicate...", "title=[Fiber Temp]");
	selectWindow("Fiber Temp");
	
	run("Gaussian Blur...", "sigma=2");

	roiManager("Select", 0);

	ThresholdF = 32;
	
	run("Find Maxima...", "noise="+ThresholdF+" output=[Segmented Particles] light");
	
	selectWindow("Fiber Temp Segmented");
	run("Invert");
	run("Options...", "iterations=1 count=1 black do=Dilate");
	run("Options...", "iterations=2 count=1 black do=Close");
	run("Invert");

	//save(filename_seg);
	run("Bio-Formats Exporter", "save=["+filename_seg+"] export compression=LZW");
	//close();
	
	selectWindow("Fiber Temp");
	run("Close");
}

/////////////////////////////////////////////////////////////////////////////////////////////////////////////
////////////////////        					MAIN PROGRAM            				////////////////////
/////////////////////////////////////////////////////////////////////////////////////////////////////////////

run("Set Measurements...", "area mean centroid feret's redirect=None decimal=3");
roiManager("reset");
maskExt = "_Lamin_Masked_Probabilities.tif";
run("Close All");
setOption("BlackBackground", true);
run("Options...", "iterations=1 count=1 black do=Nothing");
inputFolder = inputFolder + File.separator;

setBatchMode("hide");

///////////////////////////////////////////////////////////////

list = getFileList(inputFolder);
for (ik=list.length-1; ik>=0; ik--){ // for loop to parse through files in main folder 
	if(!endsWith(list[ik], maskExt)){   // if the filename does not end with correct part, pop it from the list
		list = Array.deleteIndex(list, ik);
	}
}

ROIDir=inputFolder+"ROI\\";
if(File.exists(ROIDir) < 1){
	File.makeDirectory(ROIDir);
}

/////////////////////////////////////////////////////////////////////
print(inputFolder+"==> "+list.length+" set of images to treat");

for (ik=0; ik<list.length; ik++){ // for loop to parse through names in main folder 
	// Generic information
	currentFile=inputFolder+list[ik];

	GlobalName = File.getNameWithoutExtension(currentFile);
	GlobalName = substring(list[ik],0,lengthOf(list[ik]) - lengthOf(maskExt));
	
	print("File "+(ik+1)+" of " + list.length + " in process: "+GlobalName);
	
	filename = inputFolder + GlobalName + "_Lamin_Masked_Probabilities.tif";
	filename_seg = inputFolder + GlobalName + "_Lamin_Segmentation.tif";
	filename_mask = inputFolder + GlobalName + "_Mask.tif";
	
	filename_ROI = ROIDir + GlobalName + "_ROI.zip";
	filename_MFI = ROIDir + GlobalName + "_MFI.txt";
	
	print("Open File: "+filename);
	open(filename);
	NameLamininImage = getTitle();

	print("Open File: "+filename_mask);
	open(filename_mask);
	NameMaskImage = getTitle();
	//selectWindow(NameMaskImage);
	run("Create Selection");
	roiManager("Add");
	
	// Fiber shape detection on Laminin
	FiberShapeDetectionOnLaminin(NameLamininImage,filename_seg);

	selectWindow("Fiber Temp Segmented");
	roiManager("Select", 0); // ROI selected as max area

	MinArea=100;
	MaxArea = 10000000; //LMV
	run("Analyze Particles...", "size=MinArea-MaxArea circularity=0.1-1.00 add");
	
	roiManager("Select", 0); // ROI selected as max area
	roiManager("Delete");

	roiManager("Save", filename_ROI);
	

	roiManager("reset");
	run("Close All");
}

//eval("script", "System.exit(0);");
